# Generated by Configurator on Fri Mar 21 19:45:21 CST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM12,SerialManager,COM12
Device,Olympus IX83,OlympusIX83,Olympus IX83
Device,Objective,OlympusIX83,Objective
Device,Light Path,OlympusIX83,Light Path
Device,Dichroic 2,OlympusIX83,Dichroic 2
Device,EpiShutter 2,OlympusIX83,EpiShutter 2
Device,TransmittedIllumination 1,OlympusIX83,TransmittedIllumination 1
Device,TransmittedIllumination 2,OlympusIX83,TransmittedIllumination 2
Device,FocusDrive,OlympusIX83,FocusDrive
Device,XYStage,Prior,XYStage
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices
Property,XYStage,Port,COM12

# Pre-init settings for COM ports
Property,COM12,AnswerTimeout,500.0000
Property,COM12,BaudRate,9600
Property,COM12,DTR,Disable
Property,COM12,DataBits,8
Property,COM12,DelayBetweenCharsMs,0.0000
Property,COM12,Fast USB to Serial,Disable
Property,COM12,Handshaking,Off
Property,COM12,Parity,None
Property,COM12,StopBits,1
Property,COM12,Verbose,1

# Hub (parent) references
Parent,Objective,Olympus IX83
Parent,Light Path,Olympus IX83
Parent,Dichroic 2,Olympus IX83
Parent,EpiShutter 2,Olympus IX83
Parent,TransmittedIllumination 1,Olympus IX83
Parent,TransmittedIllumination 2,Olympus IX83
Parent,FocusDrive,Olympus IX83

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Shutter,EpiShutter 2
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,6-UPLSAPO30XS
Label,Objective,4,5-LUCPLFLN60X
Label,Objective,3,4-LUCPLFLN40X
Label,Objective,2,3-LUCPLFLN20XRC
Label,Objective,1,2-SOB
Label,Objective,0,1-UPLFLN4XPH
# Light Path
Label,Light Path,2,3-Eyepiece
Label,Light Path,1,2-50-50
Label,Light Path,0,1-LeftPort
# Dichroic 2
Label,Dichroic 2,7,8-IX3-FDICT
Label,Dichroic 2,6,7-NONE
Label,Dichroic 2,5,6-NONE
Label,Dichroic 2,4,5-NONE
Label,Dichroic 2,3,4-U-FGNA
Label,Dichroic 2,2,3-U-FBNA
Label,Dichroic 2,1,2-U-FUNA
Label,Dichroic 2,0,1-NONE

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

